PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  backgroundFit = contain
  expName = soloproject_1
  keyboardBackend = Pyglet
  logging level = debug
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        print("Code component is working.")
      Begin Experiment:
        from psychopy import visual, core, event
      Begin Routine:
        from psychopy import visual, core, event

        # Clear any previous key events before starting the experiment
        event.clearEvents()

        # Set up the window with a custom monitor (or use "testMonitor" for default settings)
        win = visual.Window(
            size=[800, 600],        # Window size (width x height) in pixels
            color="black",          # Set the background color to black
            units="pix",            # Use pixels as the unit of measurement
            monitor="myMonitor",    # Use your custom monitor profile (replace with your actual monitor name)
            fullscr=False           # Set to True for fullscreen mode if needed
        )

        # Define the stimulus (e.g., a red circle)
        stimulus = visual.Circle(win, radius=50, fillColor="red", lineColor="black", pos=(0, 0))

        # Show the stimulus on the screen
        stimulus.draw()
        win.flip()  # Update the window to display the stimulus

        # Wait for a key press from the participant (space or escape)
        response = event.waitKeys(keyList=["space", "escape"])

        # Check if the response is correct and handle it
        if response:
            if response[0] == "space":
                print("Correct response!")  # If space is pressed, it's the correct response
            elif response[0] == "escape":
                print("Experiment exited.")  # If escape is pressed, exit the experiment
                core.quit()  # End the experiment

        # Close the window after the experiment is finished
        win.close()
        core.quit()
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent shapestimuli
      fillColor [set every repeat] = $color
      lineColor [set every repeat] = white
      pos [set every repeat] = $position
      shape = circle
      size = (50, 50)
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 1.0
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/_reemaaaa_18/Downloads/stimuli.csv
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict([('Condition', 'high_contrast'), ('TargetPosition', 'center'), ('Shape1', 'circle'), ('Color1', 'blue'), ('Shape2', 'square'), ('Color2', 'blue'), ('Shape3', 'square'), ('Color3', 'blue'), ('Shape4', 'circle'), ('Color4', 'blue'), ('Shape5', 'circle'), ('Color5', 'red'), ('Shape6', 'square'), ('Color6', 'blue'), ('Shape7', 'square'), ('Color7', 'blue'), ('Shape8', 'square'), ('Color8', 'blue'), ('Shape9', 'square'), ('Color9', 'blue')]),
      OrderedDict([('Condition', 'high_contrast'), ('TargetPosition', 'top-left'), ('Shape1', 'square'), ('Color1', 'blue'), ('Shape2', 'circle'), ('Color2', 'blue'), ('Shape3', 'square'), ('Color3', 'blue'), ('Shape4', 'square'), ('Color4', 'blue'), ('Shape5', 'circle'), ('Color5', 'blue'), ('Shape6', 'square'), ('Color6', 'blue'), ('Shape7', 'circle'), ('Color7', 'blue'), ('Shape8', 'square'), ('Color8', 'blue'), ('Shape9', 'square'), ('Color9', 'blue')]),
      OrderedDict([('Condition', 'low_contrast'), ('TargetPosition', 'center'), ('Shape1', 'circle'), ('Color1', 'red'), ('Shape2', 'square'), ('Color2', 'red'), ('Shape3', 'square'), ('Color3', 'red'), ('Shape4', 'square'), ('Color4', 'red'), ('Shape5', 'circle'), ('Color5', 'red'), ('Shape6', 'square'), ('Color6', 'red'), ('Shape7', 'square'), ('Color7', 'red'), ('Shape8', 'square'), ('Color8', 'red'), ('Shape9', 'circle'), ('Color9', 'red')]),
      OrderedDict([('Condition', 'low_contrast'), ('TargetPosition', 'top-left'), ('Shape1', 'square'), ('Color1', 'red'), ('Shape2', 'square'), ('Color2', 'red'), ('Shape3', 'square'), ('Color3', 'red'), ('Shape4', 'square'), ('Color4', 'red'), ('Shape5', 'square'), ('Color5', 'red'), ('Shape6', 'square'), ('Color6', 'red'), ('Shape7', 'square'), ('Color7', 'red'), ('Shape8', 'square'), ('Color8', 'red'), ('Shape9', 'circle'), ('Color9', 'red')])]
    Routine trial
  LoopTerminator trials
